CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "OTF")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_(?P<Well>[A-P][0-9]{2})_.*F(?P<Field>[0-9]{3}).*A(?P<ChannelNumber>[0-9]{2}).*.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "02")
    Name to assign these images:Fascin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "03")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "04")
    Name to assign these images:NuclearActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DNA
    Name the output image:SmoothedDNA
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:6|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
    Select the input image:Actin
    Name the output image:SmoothedActin
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SmoothedDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothedActin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Fascin, NuclearActin
    Select objects to measure:Cells, Cytoplasm, Nuclei

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Actin
    Name the output image:CellOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Nuclei_Outlines
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_Outlines
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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